PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = TE 6.14
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Routines
  Routine trial1
    TextComponent my_text_object
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    KeyboardComponent response_detector
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_game
Flow
  LoopInitiator trialloop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial1
  LoopTerminator trialloop
  Routine end_game
